# Generated by Configurator on Wed Aug 22 12:08:27 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM13,SerialManager,COM13
Device,COM1,SerialManager,COM1
Device,ZeissScope,ZeissCAN29,ZeissScope
Device,ZeissReflectorTurret,ZeissCAN29,ZeissReflectorTurret
Device,ZeissObjectiveTurret,ZeissCAN29,ZeissObjectiveTurret
Device,ZeissFieldDiaphragm,ZeissCAN29,ZeissFieldDiaphragm
Device,ZeissFocusAxis,ZeissCAN29,ZeissFocusAxis
Device,ZeissXYStage,ZeissCAN29,ZeissXYStage
Device,ZeissSidePort,ZeissCAN29,ZeissSidePort
Device,ZeissReflectedLightShutter,ZeissCAN29,ZeissReflectedLightShutter
Device,Camera,SpinnakerCamera,Chameleon3 CM3-U3-50S5M_16401327
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input

# Pre-init settings for devices
Property,COM13,AnswerTimeout,500.0000
Property,COM13,BaudRate,57600
Property,COM13,DelayBetweenCharsMs,0.0000
Property,COM13,Handshaking,Off
Property,COM13,Parity,None
Property,COM13,StopBits,1
Property,COM13,Verbose,0
Property,COM1,AnswerTimeout,2000
Property,COM1,BaudRate,57600
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1
Property,ZeissScope,AnswerTimeOut,2000.0000
Property,ZeissScope,Port,COM1
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM13
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub

# Initialize
Property,Core,Initialize,1
Property,Camera,Pixel Format,Mono16
Property,Camera,Black Level,0.0732
Property,Camera,Gamma,1
Property,Camera,Gain,4
Property,Camera,Gain Auto,Off
Property,Camera,Exposure Auto,Off
Property,Camera,Binning,1
Property,Camera,Reverse X,1
Property,Camera,Reverse Y,1
Property,Camera,TransposeXY,0
Property,Camera,TransposeMirrorX,0
Property,Camera,TransposeMirrorX,0

Property,ZeissFieldDiaphragm,mm,9.5632
Property,ZeissFocusAxis,Velocity-Acceleration,Default
Property,ZeissXYStage,Acceleration (micron/s^2),2000.0000
Property,ZeissXYStage,Move Mode,Bidirectional Precision Always
Property,ZeissXYStage,TransposeMirrorY,1
Property,ZeissXYStage,TransposeMirrorX,0
Property,ZeissXYStage,Velocity (micron/s),6000.0000
Property,ZeissXYStage,Velocity-Acceleration,Smooth
Property,ZeissSidePort,Label,3-100%R
Property,Core,TimeoutMs,30000
Property,ZeissReflectedLightShutter,State,1
Property,ZeissFocusAxis,Move Mode,Bidirectional Precision suppress small upwards

# Delays

# Focus directions

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,Arduino-Shutter
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# ZeissReflectorTurret
Label,ZeissReflectorTurret,5,6- 
Label,ZeissReflectorTurret,4,5- 
Label,ZeissReflectorTurret,3,4-
Label,ZeissReflectorTurret,2,3- 
Label,ZeissReflectorTurret,1,2-409
Label,ZeissReflectorTurret,0,1-560/659
# ZeissObjectiveTurret
Label,ZeissObjectiveTurret,5,6-Empty
Label,ZeissObjectiveTurret,4,5-EC Plan-Neofluar 40x/1.30 Oil M27
Label,ZeissObjectiveTurret,3,4-Empty
Label,ZeissObjectiveTurret,2,3-Empty
Label,ZeissObjectiveTurret,1,2-EC Plan-Neofluar 10x/0.48 Ph 1
Label,ZeissObjectiveTurret,0,1-Empty

# ZeissSidePort
Label,ZeissSidePort,2,3-100%R
Label,ZeissSidePort,1,2-Left100
Label,ZeissSidePort,0,1-100%BP

# Arduino-Switch
Label,Arduino-Switch,8,FarRed
Label,Arduino-Switch,2,DeepBlue
Label,Arduino-Switch,1,AutoFocus

# Configuration presets
# Group: Channel

# Preset: FarRed
ConfigGroup,Channel,FarRed,Arduino-Switch,Label,FarRed
ConfigGroup,Channel,FarRed,ZeissReflectorTurret,Label,1-560/659
ConfigGroup,Channel,FarRed,ZeissReflectorTurret,State,0
ConfigGroup,Channel,FarRed,Core,Shutter,Arduino-Shutter

# Preset: DeepBlue
ConfigGroup,Channel,DeepBlue,Arduino-Switch,Label,DeepBlue
ConfigGroup,Channel,DeepBlue,ZeissReflectorTurret,Label,2-409
ConfigGroup,Channel,DeepBlue,ZeissReflectorTurret,State,1
ConfigGroup,Channel,DeepBlue,Core,Shutter,Arduino-Shutter

# Preset: AutoFocus
ConfigGroup,Channel,AutoFocus,Arduino-Switch,Label,AutoFocus
ConfigGroup,Channel,AutoFocus,ZeissReflectorTurret,Label,1-560/659
ConfigGroup,Channel,AutoFocus,ZeissReflectorTurret,State,0
ConfigGroup,Channel,AutoFocus,Core,Shutter,Arduino-Shutter

# PixelSize settings
# Resolution preset: 10x
ConfigPixelSize,10x,ZeissObjectiveTurret,Label,2-EC Plan-Neofluar 10x/0.48 Ph 1
PixelSize_um,10x,0.495

# Resolution preset: 40x
ConfigPixelSize,40x,ZeissObjectiveTurret,Label,5-EC Plan-Neofluar 40x/1.30 Oil M27
PixelSize_um,40x,0.1237
