# Generated by Configurator on Wed Sep 17 17:14:24 PDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,Camera,SpinnakerCamera,Blackfly S BFS-U3-123S6M
Device,Stage,Zaber,Stage
Device,FilterCubeTurret,Zaber,FilterCubeTurret
Device,XYStage,Zaber,XYStage
Device,CHROLIS,ThorlabsCHROLIS,CHROLIS
Device,CHROLIS_Shutter,ThorlabsCHROLIS,CHROLIS_Shutter
Device,CHROLIS_LED_Control,ThorlabsCHROLIS,CHROLIS_LED_Control

# Pre-init settings for devices
Property,Camera,Serial Number,23141968
Property,Stage,Axis Number,1
Property,Stage,Controller Device Number,2
Property,Stage,Linear Motion Per Motor Rev [mm],1.0000
Property,Stage,Lockstep Group,0
Property,Stage,Motor Steps Per Rev,1000000
Property,Stage,Zaber Serial Port,COM5
Property,FilterCubeTurret,Controller Device Number,3
Property,FilterCubeTurret,Zaber Serial Port,COM5
Property,XYStage,Axis Number (X Axis),1
Property,XYStage,Axis Number (Y Axis),2
Property,XYStage,Controller Device Number,4
Property,XYStage,Controller Device Number (Y Axis),
Property,XYStage,Linear Motion Per Motor Rev (X Axis) [mm],1.0000
Property,XYStage,Linear Motion Per Motor Rev (Y Axis) [mm],1.0000
Property,XYStage,Lockstep Group (X Axis),0
Property,XYStage,Lockstep Group (Y Axis),0
Property,XYStage,Motor Steps Per Rev (X Axis),1000000
Property,XYStage,Motor Steps Per Rev (Y Axis),1000000
Property,XYStage,Zaber Serial Port,COM5
Property,CHROLIS,Serial Number,M01264827

# Pre-init settings for COM ports

# Hub (parent) references
Parent,CHROLIS_Shutter,CHROLIS
Parent,CHROLIS_LED_Control,CHROLIS

# Initialize
Property,Core,Initialize,1
Property,Camera,ADC Bit Depth,Bit12
Property,Camera,Pixel Format,Mono16
Property,Camera,Gamma Enabled,1
Property,Camera,Gamma,1
Property,Camera,Gain,4
Property,Camera,Gain Auto,Off
Property,Camera,Exposure Auto,Off
Property,Camera,Binning,1


# Delays

# Focus directions
FocusDirection,Stage,0

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,CHROLIS_Shutter
Property,Core,Focus,Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# FilterCubeTurret
Label,FilterCubeTurret,5,Filter Cube 6
Label,FilterCubeTurret,4,Filter Cube 5
Label,FilterCubeTurret,3,Filter Cube 4
Label,FilterCubeTurret,2,Filter Cube 3
Label,FilterCubeTurret,1,Filter Cube 2
Label,FilterCubeTurret,0,Filter Cube 1
# CHROLIS_LED_Control
Label,CHROLIS_LED_Control,5,InfraRed
Label,CHROLIS_LED_Control,4,FarRed
Label,CHROLIS_LED_Control,3,Orange
Label,CHROLIS_LED_Control,2,Green
Label,CHROLIS_LED_Control,1,DeepBlue
Label,CHROLIS_LED_Control,0,UltraViolet

# Configuration presets
# Group: Channel
# Preset: Green
ConfigGroup,Channel,Green,CHROLIS_LED_Control,State,4
#ConfigGroup,Channel,Green,Core,Shutter,CHROLIS_Shutter
ConfigGroup,Channel,Green,FilterCubeTurret,Label,Filter Cube 1

# Preset: Orange
ConfigGroup,Channel,Orange,CHROLIS_LED_Control,State,8
#ConfigGroup,Channel,Orange,Core,Shutter,CHROLIS_Shutter
ConfigGroup,Channel,Orange,FilterCubeTurret,Label,Filter Cube 1

# Preset: UltraViolet
ConfigGroup,Channel,UltraViolet,CHROLIS_LED_Control,State,1
#ConfigGroup,Channel,UltraViolet,Core,Shutter,CHROLIS_Shutter
ConfigGroup,Channel,UltraViolet,FilterCubeTurret,Label,Filter Cube 1

# Preset: DeepBlue
ConfigGroup,Channel,DeepBlue,CHROLIS_LED_Control,State,2
#ConfigGroup,Channel,DeepBlue,Core,Shutter,CHROLIS_Shutter
ConfigGroup,Channel,DeepBlue,FilterCubeTurret,Label,Filter Cube 1

# Preset: FarRed
ConfigGroup,Channel,FarRed,CHROLIS_LED_Control,State,16
#ConfigGroup,Channel,FarRed,Core,Shutter,CHROLIS_Shutter
ConfigGroup,Channel,FarRed,FilterCubeTurret,Label,Filter Cube 1

# Preset: InfraRed
ConfigGroup,Channel,InfraRed,CHROLIS_LED_Control,State,32
#ConfigGroup,Channel,InfraRed,Core,Shutter,CHROLIS_Shutter
ConfigGroup,Channel,InfraRed,FilterCubeTurret,Label,Filter Cube 1



# PixelSize settings
# Resolution preset: Bin4
ConfigPixelSize,Bin4,Camera,Binning,4
PixelSize_um,Bin4,0.343
# Resolution preset: Bin2
ConfigPixelSize,Bin2,Camera,Binning,2
PixelSize_um,Bin2,0.343
# Resolution preset: Bin1
ConfigPixelSize,Bin1,Camera,Binning,1
PixelSize_um,Bin1,0.343

