# Generated by Configurator on Mon Sep 20 15:51:02 PDT 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,COM8,SerialManager,COM8
Device,TIScope,NikonTI,TIScope
Device,TINosePiece,NikonTI,TINosePiece
Device,TIDiaShutter,NikonTI,TIDiaShutter
Device,Dichroics,NikonTI,TIFilterBlock1
Device,EmissionWheel,NikonTI,TIFilterBlock2
Device,TILightPath,NikonTI,TILightPath
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive
Device,TIPFSOffset,NikonTI,TIPFSOffset
Device,TIPFSStatus,NikonTI,TIPFSStatus
Device,Camera,SpinnakerCamera,Chameleon3 CM3-U3-50S5M_18277079
Device,LEDArduino-Hub,Arduino,Arduino-Hub
Device,LEDArduino-Switch,Arduino,Arduino-Switch
Device,LEDArduino-Shutter,Arduino,Arduino-Shutter

# Pre-init settings for devices
Property,LEDArduino-Hub,Logic,Normal
Property,LEDArduino-Hub,Port,COM8

# Pre-init settings for COM ports
Property,COM8,AnswerTimeout,500.0000
Property,COM8,BaudRate,57600
Property,COM8,DataBits,8
Property,COM8,DelayBetweenCharsMs,0.0000
Property,COM8,Fast USB to Serial,Disable
Property,COM8,Handshaking,Off
Property,COM8,Parity,None
Property,COM8,StopBits,1
Property,COM8,Verbose,1

# Hub (parent) references
Parent,TINosePiece,TIScope
Parent,TIDiaShutter,TIScope
Parent,Dichroics,TIScope
Parent,EmissionWheel,TIScope
Parent,TILightPath,TIScope
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope
Parent,TIPFSOffset,TIScope
Parent,TIPFSStatus,TIScope
Parent,LEDArduino-Switch,LEDArduino-Hub
Parent,LEDArduino-Shutter,LEDArduino-Hub

# Initialize
Property,Core,Initialize,1
Property,Camera,Pixel Format,Mono16
Property,Camera,Black Level,0.0732
Property,Camera,Gamma,1
Property,Camera,Gain,4
Property,Camera,Gain Auto,Off
Property,Camera,Exposure Auto,Off
Property,Camera,Binning,1
Property,Camera,Reverse X,1
Property,Camera,Reverse Y,1
Property,Camera,TransposeXY,0
Property,Camera,TransposeMirrorY,0
Property,Camera,TransposeMirrorX,0
Property,TIXYDrive,TransposeMirrorX,1
Property,TIXYDrive,TransposeMirrorY,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0
FocusDirection,TIPFSOffset,0

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,LEDArduino-Shutter
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# TINosePiece
#Label,TINosePiece,5,6-Plan Apo 20x NA 0.75 Dry
#Label,TINosePiece,4,5-Plan Fluor 40x NA 1.30 Oil
#Label,TINosePiece,3,4-Plan Apo 40x NA 0.95 Dry
#Label,TINosePiece,2,3-S Fluor 20x NA 0.75 Dry
Label,TINosePiece,0,2-Plan Fluor 10x NA 0.30 Dry
#Label,TINosePiece,0,1-Plan Apo 4x NA 0.20 Dry
# Dichroics
Label,Dichroics,5,Pentaband
#Label,Dichroics,4,488LP
#Label,Dichroics,3,G/O/5
#Label,Dichroics,2,425LP
#Label,Dichroics,1,C/Y/R
#Label,Dichroics,0,open
# EmissionWheel
#Label,EmissionWheel,5,535_30m
Label,EmissionWheel,4,open
#Label,EmissionWheel,3,690_50m
#Label,EmissionWheel,2,595_50m
#Label,EmissionWheel,1,632_60m
#Label,EmissionWheel,0,470_24m
# TILightPath
Label,TILightPath,3,Left80
Label,TILightPath,2,Right100
Label,TILightPath,1,Left100
Label,TILightPath,0,Eye100

# LEDArduino-Switch
Label,LEDArduino-Switch,8,365nm
Label,LEDArduino-Switch,4,470nm
Label,LEDArduino-Switch,2,565nm
Label,LEDArduino-Switch,1,660nm

# Configuration presets
# Group: Channel
# Preset: DeepBlue
ConfigGroup,Channel,DeepBlue,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,DeepBlue,LEDArduino-Switch,Label,365nm

# Preset: Green
ConfigGroup,Channel,Green,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,Green,LEDArduino-Switch,Label,470nm

# Preset: Orange
ConfigGroup,Channel,Orange,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,Orange,LEDArduino-Switch,Label,565nm

# Preset: FarRed
ConfigGroup,Channel,FarRed,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,FarRed,LEDArduino-Switch,Label,660nm

# Preset: Brightfield
ConfigGroup,Channel,Brightfield,Core,Shutter,TIDiaShutter

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,TILightPath,Label,Right100



# PixelSize settings
# Resolution preset: 20Xnew
#ConfigPixelSize,20Xnew,TINosePiece,State,5
#PixelSize_um,20Xnew,0.3225

# Resolution preset: 4x
#ConfigPixelSize,4x,TINosePiece,State,0
#PixelSize_um,4x,1.6

# Resolution preset: 20x
#ConfigPixelSize,20x,TINosePiece,State,2
#PixelSize_um,20x,0.3225

# Resolution preset: 40x
ConfigPixelSize,40x,TINosePiece,State,3
PixelSize_um,40x,0.123

# Resolution preset: 10x
ConfigPixelSize,10x,TINosePiece,State,0
PixelSize_um,10x,0.490 # Optovar 1.5X = 0.490 1.0X = 0.327


