# Generated by Configurator on Thu Jul 17 11:16:52 PDT 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM5,SerialManager,COM5
Device,Camera,SpinnakerCamera,Chameleon3 CM3-U3-50S5M_18276799
Device,LEDArduino-Hub,Arduino,Arduino-Hub
Device,LEDArduino-Switch,Arduino,Arduino-Switch
Device,LEDArduino-Shutter,Arduino,Arduino-Shutter
Device,XYStage,ASIStage,XYStage
Device,ZStage,ASIStage,ZStage

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,9600
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,57600
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,LEDArduino-Hub,Logic,Normal
Property,LEDArduino-Hub,Port,COM5
Property,XYStage,Port,COM6
Property,XYStage,TransposeMirrorX,1
Property,ZStage,Port,COM6
Property,ZStage,Axis,Z

# Pre-init settings for COM ports

# Hub (parent) references
Parent,LEDArduino-Switch,LEDArduino-Hub
Parent,LEDArduino-Shutter,LEDArduino-Hub

# Initialize
Property,Core,Initialize,1
Property,Camera,Pixel Format,Mono16
Property,Camera,Black Level,0.0732
Property,Camera,Gamma,1
Property,Camera,Gain,4
Property,Camera,Gain Auto,Off
Property,Camera,Exposure Auto,Off
Property,Camera,Binning,1
Property,Camera,Reverse X,1
Property,Camera,Reverse Y,1
Property,Camera,TransposeXY,0
Property,Camera,TransposeMirrorY,0
Property,Camera,TransposeMirrorX,0
Property,XYStage,TransposeMirrorX,0
Property,XYStage,TransposeMirrorY,1

# Delays

# Focus directions
FocusDirection,ZStage,1

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,LEDArduino-Shutter
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# LEDArduino-Switch
Label,LEDArduino-Switch,2,625nm
Label,LEDArduino-Switch,1,365nm

# Configuration presets
# Group: Channel
# Preset: DeepBlue
ConfigGroup,Channel,DeepBlue,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,DeepBlue,LEDArduino-Switch,Label,365nm

# Preset: FarRed
ConfigGroup,Channel,FarRed,Core,Shutter,LEDArduino-Shutter
ConfigGroup,Channel,FarRed,LEDArduino-Switch,Label,625nm



# PixelSize settings
# Resolution preset: Res0
ConfigPixelSize,Res0,Core,XYStage,XYStage
PixelSize_um,Res0,0.428
PixelSizeAffine,Res0,0.343,0.0,0.0,0.0,0.343,0.0

